PsychoPy2experiment version="2025.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'gruppe': '["odd", "even"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = #E0E0E0
  expName = Teamprojekt
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine StartScreen
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    KeyboardComponent keyStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent textStartMessage
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Hiermit startet das Experiment!

        Du musst 15 Blocks absolvieren.
        Gib nach jeder Bewegung an, ob es sich um eine Elementbewegung ('F'-Taste) oder eine Gruppenbewegung ('J'-Taste) handelte.

        Drücke die Leertaste, um zu beginnen.
  Routine trialPortal1
    RoutineSettingsComponent trialPortal1
      disabled = True
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  Routine trialPortal2
    RoutineSettingsComponent trialPortal2
      disabled = True
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  Routine blankVariable
    RoutineSettingsComponent blankVariable
      disabled = True
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  Routine trialBarrier1
    RoutineSettingsComponent trialBarrier1
      disabled = True
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    PolygonComponent ternusObjLeft_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_3
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine trialBarrier2
    RoutineSettingsComponent trialBarrier2
      disabled = True
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    PolygonComponent ternusObjLeft_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_4
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_4
      fillColor [set every repeat] = $objectColor
      lineColor [set every repeat] = $objectColor
      pos = (3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_4
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine trialStandard1
    RoutineSettingsComponent trialStandard1
      disabled = True
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    PolygonComponent ternusObjLeft_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_5
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_5
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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  Routine trialStandard2
    RoutineSettingsComponent trialStandard2
      disabled = True
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    PolygonComponent ternusObjLeft_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjMiddle_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent ternusObjRight_6
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    PolygonComponent FixationCross_6
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      units = deg
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    KeyboardComponent keyStandard
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ternusFrame1
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    CodeComponent codeObjectParameters
      Code Type = Auto->JS
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      Begin Experiment:
        # default Frame 2 Ternus colors
        leftFrame2_Color = "black"
        middleFrame2_Color = "black"
        rightFrame2_Color = "black"
      Begin Routine:
        colorList = [
            "#E41A1C",  # red
            "#1E88E5",  # blue
            "#2EBD59",  # green
            "#C200FB",  # purple
        ]

        causalColor = np.random.choice(colorList)

        direction = np.random.choice(["LR", "RL"])

        if direction == "LR":
            leftFrame1_Pos = (-6, 3)
            middleFrame1_Pos = (-2, 3)
            rightFrame1_Pos = (2, 3)

            leftFrame2_Pos = (-2, 3)
            middleFrame2_Pos = (2, 3)
            rightFrame2_Pos = (6, 3)

        elif direction == "RL":
            leftFrame1_Pos = (-2, 3)
            middleFrame1_Pos = (2, 3)
            rightFrame1_Pos = (6, 3)

            leftFrame2_Pos = (-6, 3)
            middleFrame2_Pos = (-2, 3)
            rightFrame2_Pos = (2, 3)

        # default: invisible causal objects
        portalOpacity = 0
        barrierOpacity = 0
        barrierPos = (2,2)

        # default Ternus color
        ternusColor = "black"

        # reset every trial
        leftFrame2_Color = "black"
        middleFrame2_Color = "black"
        rightFrame2_Color = "black"

        if condition == "Portal":
            portalOpacity = 1
            barrierOpacity = 0


        elif condition == "Barrier":
            portalOpacity = 0
            barrierOpacity = 1


        elif condition == "Standard":
            portalOpacity = 0
            barrierOpacity = 0
            ternusColor = "black"

        # color-change only in Portal/Barrier
        if condition == "Portal" or condition == "Barrier":
            if direction == "LR":
                rightFrame2_Color = causalColor
                barrierPos = (4,3)
            elif direction == "RL":
                leftFrame2_Color = causalColor
                barrierPos = (-4,3)


        thisExp.addData("group", group)
        thisExp.addData("condition", condition)
        thisExp.addData("interstim_interval", interstim_interval)
        thisExp.addData("direction", direction)
        thisExp.addData("causalColor", causalColor)
        thisExp.addData("blockNumber", blockNumber)
        thisExp.addData("participantID", participantID)
    PolygonComponent ternusObjLeft
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = leftFrame1_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddle
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame1_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRight
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = rightFrame1_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalLeft
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = portalLeftPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRight
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = portalRightPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent Barrier
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos [set every repeat] = barrierPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine blankISI
    RoutineSettingsComponent blankISI
      skipIf = interstim_interval == 0
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    PolygonComponent FixationCrossBlank
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $interstim_interval
      units = deg
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  Routine ternusFrame2
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = $ternusDuration
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    PolygonComponent ternusObjLeft_2
      fillColor [set every repeat] = $leftFrame2_Color
      lineColor [set every repeat] = $leftFrame2_Color
      pos [set every repeat] = leftFrame2_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddle_2
      fillColor = $middleFrame2_Color
      lineColor = $middleFrame2_Color
      pos [set every repeat] = middleFrame2_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRight_2
      fillColor [set every repeat] = $rightFrame2_Color
      lineColor [set every repeat] = $rightFrame2_Color
      pos [set every repeat] = rightFrame2_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCross_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent portalLeft_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = portalLeftPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRight_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = portalRightPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent Barrier_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos [set every repeat] = barrierPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine blockBreak
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    CodeComponent codeBlockCount
      Code Type = Auto->JS
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      Begin Routine:
        blockNumber += 1

        breakText = (
            "Sehr gut! Du hast Block " +str(blockNumber) + " von 15 abgeschlossen.\n\n"
            "Mach gerne eine kurze Pause.\n\n"
            "Bitte drücke die 'F'-Taste, wenn sich die Elemente unabhängig voneinander bewegen "
            "(Elementbewegung), und die 'J'-Taste, wenn sich die Elemente gemeinsam "
            "bewegen (Gruppenbewegung).\n\n"
            "Drücke die Leertaste, um mit dem nächsten Block fortzufahren."
        )


        if blockNumber == 15:
            breakText = (
            "Sehr gut! Du hast Block " +str(blockNumber) + " von 15 abgeschlossen.\n\n"
            "Die Testphase ist damit beendet!\n\n"
            "Als Letztes musst du noch einen kurzen Fragebogen zu deiner Erfahrung ausfüllen.\n\n"
            "Drücke die Leertaste, um fortzufahren."
        )
    KeyboardComponent keyBlockContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent textBlockInstructions
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $breakText
      wrapWidth = 1.5
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  Routine EndScreen
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    TextComponent textEnd
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Das Experiment ist abgeschlossen!

        Du kannst den Arbeitsplatz jetzt verlassen und dem Versuchsleiter Bescheid geben.

        Vielen Dank für die Teilnahme!
  Routine blank800
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    PolygonComponent FixationCrossBlank800
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      units = deg
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  Routine InstructionScreen
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    CodeComponent codeGroupTracker
      Code Type = Auto->JS
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      Begin Experiment:
        participantID = int(expInfo["participant"])

        if participantID % 2 == 1:
            group = "A"
        else:
            group = "B"

        thisExp.addData("group", group)
    CodeComponent codeDimensionsAndPositions
      Code Type = Auto->JS
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      Begin Experiment:
        blockNumber = 0
        ternusDuration = 0.2

        ternusDiameter = (2.8)
        fixationCrossDim = (0.3, 0.3)
        PortalBarrierDim = (0.2, 3.2)
        portalLeftPos = (-8, 3)
        portalRightPos = (8, 3)
        barrierPos = (4,3)
    KeyboardComponent keyInstructionContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    TextComponent textInstructions
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Im folgenden Teil der Studie siehst du wiederholt kurze Abfolgen von drei Kreisen.

        Zwischen den beiden Darstellungen können die Kreise auf unterschiedliche Weise wahrgenommen werden:


        • Bei einer Elementbewegung entsteht der Eindruck, dass zwei Kreise ihre Position beibehalten, während ein weiterer Kreis verschwindet und auf der gegenüberliegenden Seite wieder erscheint.

        • Bei einer Gruppenbewegung scheinen sich alle drei Kreise gemeinsam als Gruppe zu bewegen.


        Deine Aufgabe besteht darin, bei jedem Durchgang anzugeben, welche Wahrnehmung du hattest.

        Drücke:

        F = Elementbewegung

        J = Gruppenbewegung

        Es gibt keine richtigen oder falschen Antworten. Bitte gib jeweils die Wahrnehmung an, die deinem Eindruck am besten entspricht.

         Zunächst siehst du zwei Beispiele und bearbeitest anschließend einige Übungsdurchgänge.

        Bitte fixiere während aller Durchgänge das Fixationskreuz in der Bildschirmmitte.

        Drücke die Leertaste, um fortzufahren.
  Routine blank160
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    PolygonComponent FixationCrossBlank160
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.16
      units = deg
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  Routine elementMotionExplained
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    KeyboardComponent keyElementMotionExplained
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent textElementMotion
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Bei kurzen Unterbrechungen entsteht häufig der Eindruck einer Elementbewegung.

        Dabei scheinen zwei Kreise ihre Position beizubehalten, während ein weiterer Kreis auf der gegenüberliegenden Seite erscheint.



        Drücke die Leertaste, um das Beispiel zu sehen.
        Lass deinen Blick dabei auf dem Fixationskreuz ruhen.
  Routine groupMotionExplained
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    KeyboardComponent keyGroupMotionExplained
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent textGroupMotion
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Bei längeren Unterbrechungen entsteht häufig der Eindruck einer Gruppenbewegung.


        Dabei scheinen sich alle drei Kreise gemeinsam als Gruppe zu bewegen.


        Drücke die Leertaste, um das Beispiel zu sehen.
  Routine practiceFrame1
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    CodeComponent codeObjectParametersPractice
      Code Type = Auto->JS
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      Begin Experiment:
        # default Frame 2 Ternus colors
        leftFrame2_Color = "black"
        middleFrame2_Color = "black"
        rightFrame2_Color = "black"
      Begin Routine:
        colorList = [
            "#E41A1C",  # red
            "#1E88E5",  # blue
            "#2EBD59",  # green
            "#C200FB",  # purple
        ]

        causalColor = np.random.choice(colorList)

        direction = np.random.choice(["LR", "RL"])

        if direction == "LR":
            leftFrame1_Pos = (-6, 3)
            middleFrame1_Pos = (-2, 3)
            rightFrame1_Pos = (2, 3)

            leftFrame2_Pos = (-2, 3)
            middleFrame2_Pos = (2, 3)
            rightFrame2_Pos = (6, 3)

        elif direction == "RL":
            leftFrame1_Pos = (-2, 3)
            middleFrame1_Pos = (2, 3)
            rightFrame1_Pos = (6, 3)

            leftFrame2_Pos = (-6, 3)
            middleFrame2_Pos = (-2, 3)
            rightFrame2_Pos = (2, 3)

        # default: invisible causal objects
        portalOpacity = 0
        barrierOpacity = 0
        barrierPos = (2,2)

        # default Ternus color
        ternusColor = "black"

        # reset every trial
        leftFrame2_Color = "black"
        middleFrame2_Color = "black"
        rightFrame2_Color = "black"

        if conditions_practice == "Portal":
            portalOpacity = 1
            barrierOpacity = 0


        elif conditions_practice == "Barrier":
            portalOpacity = 0
            barrierOpacity = 1


        elif conditions_practice == "Standard":
            portalOpacity = 0
            barrierOpacity = 0
            ternusColor = "black"

        # color-change only in Portal/Barrier
        if conditions_practice == "Portal" or conditions_practice == "Barrier":
            if direction == "LR":
                rightFrame2_Color = causalColor
                barrierPos = (4,3)
            elif direction == "RL":
                leftFrame2_Color = causalColor
                barrierPos = (-4,3)

        thisExp.addData("causalColor", causalColor)
        thisExp.addData("direction", direction)
    PolygonComponent ternusObjLeftPrac
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = leftFrame1_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddlePrac
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame1_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRightPrac
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = rightFrame1_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCrossPrac
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalLeftPrac
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = portalLeftPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRightPrac
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = portalRightPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent BarrierPrac
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos [set every repeat] = barrierPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine practiceFrame2
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    KeyboardComponent keyPractice
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = $ternusDuration
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    PolygonComponent ternusObjLeftPrac_2
      fillColor [set every repeat] = $leftFrame2_Color
      lineColor [set every repeat] = $leftFrame2_Color
      pos [set every repeat] = leftFrame2_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddlePrac_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame2_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRightPrac_2
      fillColor [set every repeat] = $rightFrame2_Color
      lineColor [set every repeat] = $rightFrame2_Color
      pos [set every repeat] = rightFrame2_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCrossPrac_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent portalLeftPrac_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = portalLeftPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRightPrac_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = portalRightPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent BarrierPrac_2
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos [set every repeat] = barrierPos
      shape = rectangle
      size = PortalBarrierDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine blankISI_Practice
    RoutineSettingsComponent blankISI_Practice
      skipIf = ISI_practice == 0
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    PolygonComponent FixationCrossBlankPractice
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI_practice
      units = deg
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  Routine practiceFrame2_2
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    KeyboardComponent key_resp_3
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent ternusObjLeft_7
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjMiddle_7
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (1, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusObjRight_7
      fillColor [set every repeat] = $ternusColor
      lineColor [set every repeat] = $ternusColor
      pos = (3, 2)
      shape = circle
      size = (1.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCross_7
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent portalLeft_3
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (-4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent portalRight_3
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = portalOpacity
      pos = (4, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent Barrier_3
      fillColor [set every repeat] = $causalColor
      lineColor [set every repeat] = $causalColor
      opacity [set every repeat] = barrierOpacity
      pos = (2, 2)
      shape = rectangle
      size = (0.1, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine exampleFrame1
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    CodeComponent codeMovementDirection
      Code Type = Auto->JS
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      Begin Routine:
        direction = np.random.choice(["LR", "RL"])
        thisExp.addData("direction", direction)

        if direction == "LR":
            leftFrame1_Pos = (-6, 3)
            middleFrame1_Pos = (-2, 3)
            rightFrame1_Pos = (2, 3)

            leftFrame2_Pos = (-2, 3)
            middleFrame2_Pos = (2, 3)
            rightFrame2_Pos = (6, 3)

        elif direction == "RL":
            leftFrame1_Pos = (-2, 3)
            middleFrame1_Pos = (2, 3)
            rightFrame1_Pos = (6, 3)

            leftFrame2_Pos = (-6, 3)
            middleFrame2_Pos = (-2, 3)
            rightFrame2_Pos = (2, 3)
    PolygonComponent ternusExampleLeft
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = leftFrame1_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusExampleMiddle
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame1_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusExampleRight
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = rightFrame1_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCrossExample
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine exampleFrame2
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    PolygonComponent ternusExampleLeft_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = leftFrame2_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusExampleMiddle_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = middleFrame2_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent ternusExampleRight_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = rightFrame2_Pos
      shape = circle
      size = ternusDiameter
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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    PolygonComponent FixationCrossExample_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = fixationCrossDim
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ternusDuration
      units = deg
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  Routine PracticeExplained
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    KeyboardComponent keyPracticeStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent textPracticeExplained
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Drücke die Leertaste, um mit den Übungsdurchgängen zu beginnen.

        Dabei musst du nach jeder Bewegung deinen Eindruck angeben, ob es sich um eine Elementbewegung ('F'-Taste) oder eine Gruppenbewegung ('J'-Taste) handelte.

        Bitte halte während aller Durchgänge deinen Blick auf das Fixationskreuz in der Bildschirmmitte gerichtet.
  Routine colorTest
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    KeyboardComponent keyColorTest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent redCircle
      fillColor = #E41A1C
      lineColor = #E41A1C
      pos = (5, 0)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent blueCircle
      fillColor = #2196F3
      lineColor = #2196F3
      pos = (4, 0)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent greenCircle
      fillColor = #32CD32
      lineColor = #32CD32
      pos = (3, 0)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent purpleCircle
      fillColor = #7F00FF
      lineColor = #7F00FF
      pos = (2, 0)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent orangeCircle
      fillColor = #c200fb
      lineColor = #c200fb
      pos = (1, 0)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent brownCircle
      fillColor = #007ad1
      lineColor = #007ad1
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent pinkCircle
      fillColor = #3f8700
      lineColor = #3f8700
      pos = (-1, 0)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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    PolygonComponent tealCircle
      fillColor = #ee002c
      lineColor = #ee002c
      pos = (-2, 0)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = deg
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  Routine blank500
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    TextComponent blankText500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine beginning
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    TextComponent beginning_text
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Willkommen bei unserem Experiment!

        Das Experiment wird in drei Phasen ablaufen:
        1. Lernphase
        2. Testphase
        3. Fragebogen

        Drücke die Leertaste, um fortzufahren.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if expInfo['gruppe'] == 'odd':
            intro_text = (
                "Du befindest dich jetzt in der Lernphase. "
                "Gleich siehst du ein Display mit einem ausgefüllten schwarzen Kreis, der "
                "sich seitlich auf vier Positionen bewegen kann, und einen umrandeten Zielkreis "
                "in einer bestimmten Farbe.\n\n"
                "Dein Ziel wird es sein, den schwarzen Kreis an die Zielposition zu bringen. "
                "Dabei soll er vorher die Farbe angenommen haben, die das Ziel vorgibt.\n\n"
                "Zuerst siehst du einige Beispiele. Danach probierst du es selbst. \n\n"
                "Drücke die Leertaste, um zu starten."
            )
        else:
            intro_text = (
                "Du befindest dich jetzt in der Lernphase. "
                "Gleich siehst du ein Display mit einem ausgefüllten schwarzen Kreis, der "
                "sich seitlich auf vier Positionen bewegen kann und einem umrandeten "
                "Zielkreis in einer bestimmten Farbe.\n\n"
                "Dein Ziel wird es sein, den schwarzen Kreis an die Zielposition zu bringen. "
                "Dass du es geschafft hast, wird dir mit einem Farbwechsel signalisiert.\n\n"
                "Zuerst siehst du einige Beispiele. Danach probierst du es selbst. \n\n"
                "Drücke die Leertaste, um zu starten."
            )
    TextComponent introtext
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_text
      wrapWidth = 1.5
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo
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    CodeComponent democode
      Code Type = Auto->JS
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      Begin Routine:
        # Konstanten
        SCHWARZ = '#222222'
        farben  = {'gruen': '#32CD32', 'blau': '#2196F3', 'rot': '#E41A1C', 'lila': '#C200FB'}
        POS_X = [-0.45, -0.15, 0.15, 0.45]
        POS_Y = 0.0
        kreis_radius = 0.05
        RAND_X = 0.65   #Position für Portale

        zielfarbe = farben[farbe]

        box = visual.Rect(win, width=1.4, height=0.4, units='height',
                          lineColor='black', lineWidth=3, fillColor=None, pos=(0, 0))
        ziel = visual.Circle(win, radius=kreis_radius, units='height',
                             fillColor=None, lineColor=zielfarbe, lineWidth=4,
                             pos=(POS_X[ziel_index], POS_Y))
        kreis = visual.Circle(win, radius=kreis_radius, units='height',
                              fillColor=SCHWARZ, lineColor=SCHWARZ,
                              pos=(POS_X[start_index], POS_Y))

        # Typ-abhängige Striche
        elemente = []
        if typ == 'durchgang':
            durchgang_x = (POS_X[durchgang_index] + POS_X[durchgang_index + 1]) / 2.0
            durchgang = visual.Line(win, start=(durchgang_x, -0.16), end=(durchgang_x, 0.16),
                                    units='height', lineColor=zielfarbe, lineWidth=8)
            elemente = [durchgang]
        elif typ == 'portal':
            portal_l = visual.Line(win, start=(-RAND_X, -0.16), end=(-RAND_X, 0.16),
                                   units='height', lineColor=zielfarbe, lineWidth=8)
            portal_r = visual.Line(win, start=(RAND_X, -0.16), end=(RAND_X, 0.16),
                                   units='height', lineColor=zielfarbe, lineWidth=8)
            elemente = [portal_l, portal_r]

        # Demo-Ablauf
        aktueller_index = start_index
        aktuelle_farbe  = SCHWARZ
        zuege         = loesung.split()
        naechster_zug = 0
        schritt_dauer = 0.7
        nachlauf      = 1.0               # am Ende kurz stehen bleiben

        blank_start = len(zuege) * schritt_dauer + nachlauf
        blank_dauer = 1.0
      Each Frame:
        if naechster_zug < len(zuege) and t >= (naechster_zug + 1) * schritt_dauer:
            richtung = zuege[naechster_zug]
            alter_index = aktueller_index

            if richtung == 'right':
                if aktueller_index < 3:
                    aktueller_index += 1
                elif typ == 'portal':
                    aktueller_index = 0
                    aktuelle_farbe = zielfarbe
            elif richtung == 'left':
                if aktueller_index > 0:
                    aktueller_index -= 1
                elif typ == 'portal':
                    aktueller_index = 3
                    aktuelle_farbe = zielfarbe

            if typ == 'durchgang':
                links  = min(POS_X[alter_index], POS_X[aktueller_index])
                rechts = max(POS_X[alter_index], POS_X[aktueller_index])
                if links < durchgang_x < rechts:
                    aktuelle_farbe = zielfarbe

            if typ == 'normal' and aktueller_index == ziel_index:
                aktuelle_farbe = zielfarbe

            kreis.fillColor = aktuelle_farbe
            kreis.lineColor = aktuelle_farbe
            kreis.pos = (POS_X[aktueller_index], POS_Y)
            naechster_zug += 1

        # Demo zu Ende?
        if t >= blank_start + blank_dauer:
            continueRoutine = False

        inBlank = (t >= blank_start and t < blank_start + blank_dauer)

        if not (inBlank):
            box.draw()
            for e in elemente:
                e.draw()
            ziel.draw()
            kreis.draw()
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine uebergang
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    TextComponent uebergangstext
      color = black
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Nun bist du dran!

        Du steuerst den Kreis mit den Pfeiltasten (links und rechts). Bring ihn ans Ziel.

        Drücke die Leertaste, um zu beginnen.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialSimulation
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    CodeComponent simcode
      Code Type = Auto->JS
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      Begin Routine:
        # Konstanten
        SCHWARZ = '#222222'
        farben  = {'gruen': '#32CD32', 'blau': '#2196F3', 'rot': '#E41A1C', 'lila': '#C200FB'}
        POS_X = [-0.45, -0.15, 0.15, 0.45]
        POS_Y = 0.0
        kreis_radius = 0.05
        RAND_X = 0.65   #Position für Portale

        zielfarbe = farben[farbe]

        box = visual.Rect(win, width=1.4, height=0.4, units='height',
                          lineColor='black', lineWidth=3, fillColor=None, pos=(0, 0))
        ziel = visual.Circle(win, radius=kreis_radius, units='height',
                             fillColor=None, lineColor=zielfarbe, lineWidth=4,
                             pos=(POS_X[ziel_index], POS_Y))
        kreis = visual.Circle(win, radius=kreis_radius, units='height',
                              fillColor=SCHWARZ, lineColor=SCHWARZ,
                              pos=(POS_X[start_index], POS_Y))

        warnung = visual.TextStim(
            win,
            text   = 'Falsche Farbe!',
            pos    = (0, -0.35),      # unten am Bildschirmrand
            height = 0.04,
            color  = 'red',
            units  = 'height'
        )

        # Typ-abhängige Striche
        elemente = []
        if typ == 'durchgang':
            durchgang_x = (POS_X[durchgang_index] + POS_X[durchgang_index + 1]) / 2.0
            durchgang = visual.Line(win, start=(durchgang_x, -0.16), end=(durchgang_x, 0.16),
                                    units='height', lineColor=zielfarbe, lineWidth=8)
            elemente = [durchgang]
        elif typ == 'portal':
            portal_l = visual.Line(win, start=(-RAND_X, -0.16), end=(-RAND_X, 0.16),
                                   units='height', lineColor=zielfarbe, lineWidth=8)
            portal_r = visual.Line(win, start=(RAND_X, -0.16), end=(RAND_X, 0.16),
                                   units='height', lineColor=zielfarbe, lineWidth=8)
            elemente = [portal_l, portal_r]

        # Zustand
        aktueller_index = start_index
        aktuelle_farbe  = SCHWARZ
        ziel_seit       = None
        gewonnen        = False
      Each Frame:
        tasten = event.getKeys(keyList=['left', 'right'])
        for t_taste in tasten:
            alter_index = aktueller_index

            if t_taste == 'right':
                if aktueller_index < 3:
                    aktueller_index = aktueller_index + 1
                elif typ == 'portal':
                    aktueller_index = 0                 # rechtes Portal -> links raus
                    aktuelle_farbe = zielfarbe
                    kreis.fillColor = aktuelle_farbe
                    kreis.lineColor = aktuelle_farbe
                # sonst: Wand

            elif t_taste == 'left':
                if aktueller_index > 0:
                    aktueller_index = aktueller_index - 1
                elif typ == 'portal':
                    aktueller_index = 3                 # linkes Portal -> rechts raus
                    aktuelle_farbe = zielfarbe
                    kreis.fillColor = aktuelle_farbe
                    kreis.lineColor = aktuelle_farbe
                # sonst: Wand

            # Durchgang gekreuzt?
            if typ == 'durchgang':
                x_vorher  = POS_X[alter_index]
                x_nachher = POS_X[aktueller_index]
                if (x_vorher < durchgang_x < x_nachher) or (x_nachher < durchgang_x < x_vorher):
                    aktuelle_farbe = zielfarbe
                    kreis.fillColor = aktuelle_farbe
                    kreis.lineColor = aktuelle_farbe

        kreis.pos = (POS_X[aktueller_index], POS_Y)

        #Gruppe B
        if typ == 'normal':
            if aktueller_index == ziel_index:
                aktuelle_farbe = zielfarbe
            else:
                aktuelle_farbe = SCHWARZ
            kreis.fillColor = aktuelle_farbe
            kreis.lineColor = aktuelle_farbe
        #Gewinnen = richtige Position + richtige Farbe
        auf_ziel       = (aktueller_index == ziel_index)
        richtige_farbe = (aktuelle_farbe == zielfarbe)

        # Warnung falsche farbe
        falsche_farbe_auf_ziel = auf_ziel and not richtige_farbe
        #falsche_farbe_auf_ziel = (
        #    aktueller_index == ziel_index and
        #    aktuelle_farbe != zielfarbe
        #)

        if auf_ziel and richtige_farbe:
            if ziel_seit is None:
                ziel_seit = t
            elif (t - ziel_seit) >= 0.5:
                gewonnen = True
                continueRoutine = False
        else:
            ziel_seit = None


        box.draw()
        for e in elemente:
            e.draw()
        ziel.draw()
        kreis.draw()

        if falsche_farbe_auf_ziel:
            warnung.draw()
    KeyboardComponent key_resp_7
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WelcomeScreen
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    KeyboardComponent keyWelcomeContinue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent textWelcome
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Sehr gut! Du hast die Lernphase erfolgreich abgeschlossen.
        Es folgt die Testphase.

        Drücke die Leertaste, um fortzufahren.
  Routine Einwilligungserklaerung
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    KeyboardComponent keyEinwilligung
      allowedKeys = 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent textEinwilligung
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Ich wurde schriftlich über die Inhalte und den Ablauf der 30-minütigen Studie aufgeklärt.

        Mit der in den Teilnehmendeninformationen beschriebenen anonymen Erhebung und Verarbeitung der Experimentaldaten sowie Alter und Geschlecht bin ich einverstanden.

        Ich bin damit einverstanden, dass die anonymen Daten zu Forschungszwecken weiterverwendet werden können und langfristig in einem wissenschaftlichen Online-Datenarchiv öffentlich zugänglich gemacht werden (z.B. Open Research Plattform Zenodo [https://zenodo.org/]).

        Ich versichere, dass ich mindestens 18 Jahre alt bin, über eine normale oder korrigierte Sehfähigkeit verfüge, die Informationen gelesen und verstanden habe und genügend Zeit für eine Entscheidung hatte.

        Ich weiß, dass die Teilnahme an der Studie freiwillig ist und ich die Teilnahme jederzeit ohne Angaben von Gründen beenden kann.

        Mit dem Drücken der “J” Taste erkläre mich dazu bereit an der oben genannten Studie teilzunehmen.

        Bei Fragen oder anderen Anliegen kann ich mich an folgende Personen wenden: Dr. Elisabeth Hein, Schleichstrasse 4, 72076 Tübingen, Telefon: 07071 29-75641, elisabeth.hein@uni-tuebingen.de
    TextComponent textUeberschrift
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Einwilligungserklärung
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  Routine questionRouter
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    CodeComponent codeQuestionLogic
      Code Type = Auto->JS
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      Begin Routine:
        showThisQuestion = (groupShow == "all" or groupShow == group)

        showRating = showThisQuestion and qType == "rating"
        showText = showThisQuestion and qType == "text"
        showYesNo = showThisQuestion and qType == "yesno"

        continueRoutine = False
  Routine RatingQuestion
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    CodeComponent codeRatingQuestion
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True

        if not showRating:
            continueRoutine = False


        ratingKb = keyboard.Keyboard()
        ratingKb.clearEvents()
        ratingWarning = "Weiter mit der rechten Pfeiltaste."
      Each Frame:
        keys = ratingKb.getKeys(["right"], waitRelease=False)

        if keys:
            if ratingSlider.rating is not None:
                continueRoutine = False
            else:
                ratingWarning = "Bitte gib zuerst eine Antwort auf der Skala,\n dann weiter mit der rechten Pfeiltaste."
                ratingKb.clearEvents()
      End Routine:
        if showRating:
            thisExp.addData("qID", qID)
            thisExp.addData("questionText", questionText)
            thisExp.addData("questionType", qType)
            thisExp.addData("questionAnswer", ratingSlider.rating)
            win.mouseVisible = False
    SliderComponent ratingSlider
      color = -1.0000, -1.0000, -1.0000
      fillColor = darkred
      forceEndRoutine = False
      granularity = 1
      initVal = 4
      labels = 'stimme gar\nnicht zu', '', '', 'neutral', '', '', 'stimme voll\nund ganz zu'
      letterHeight = 0.025
      size = (0.95, 0.04)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextboxComponent textboxRatingQuestion
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.2)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionText
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    TextboxComponent textboxArrowHint
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.025
      pos = (0, -0.25)
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      text [set every frame] = $ratingWarning
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  Routine FreeTextQuestion
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    CodeComponent codeFreeTextQuestion
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True

        event.clearEvents(eventType="keyboard")

        if skipRuleFollowups and group == "B":
            continueRoutine = False

        if not showText:
            continueRoutine = False
      Each Frame:
        hasText = len(freeTextBox.text.strip()) > 0

        keys = event.getKeys(keyList=["right", "escape"])

        if "escape" in keys:
            core.quit()

        if "right" in keys:
            if hasText:
                continueRoutine = False
            else:
                event.clearEvents(eventType="keyboard")
      End Routine:
        if showText:
            thisExp.addData("qID", qID)
            thisExp.addData("questionText", questionText)
            thisExp.addData("questionType", qType)
            thisExp.addData("questionAnswer", freeTextBox.text.strip())
            win.mouseVisible = False
    TextboxComponent freeTextBox
      alignment = center-left
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 0.8, 0.8, 0.8
      letterHeight = 0.03
      placeholder = Klicke hier und tippe deine Antwort...
      size = (0.95, 0.15)
      startVal [time (s)] = 0.0
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    TextboxComponent textboxFreeTextQuestion
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.2)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionText
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    TextboxComponent textboxArrowHint_2
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.025
      opacity [set every frame] = 1
      pos = (0, -0.25)
      size = (1.5, 1)
      startVal [condition] = $len(freeTextBox.text.strip()) > 0
      text = Weiter mit rechter Pfeiltaste.
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  Routine YesNoQuestion
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    CodeComponent codeYesNoQuestion
      Code Type = Auto->JS
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      Begin Experiment:
        skipRuleFollowups = False
      Begin Routine:
        if not showYesNo:
            continueRoutine = False
      End Routine:
        if showYesNo:

            if yesNoKeyboard.keys == "j":
                thisExp.addData("questionAnswer", "Ja")
                skipRuleFollowups = False

            elif yesNoKeyboard.keys == "n":
                thisExp.addData("questionAnswer", "Nein")
                skipRuleFollowups = True


        thisExp.addData("qID", qID)
        thisExp.addData("questionText", questionText)
        thisExp.addData("questionType", qType)
    TextboxComponent textboxYesNo
      bold = False
      color = 1.0000, 0.9500, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, -0.025)
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Bitte drücke auf deiner Tastatur:
        [ J ] für JA
        [ N ] für NEIN
    TextboxComponent textboxYesNoQuestion
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      letterHeight = 0.035
      pos = (0, 0.2)
      size = (1.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $questionText
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    KeyboardComponent yesNoKeyboard
      allowedKeys = 'j','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine QuestionnaireFinish
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    TextComponent textFinishMessage
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Der Fragebogen ist abgeschlossen!

        Das Experiment ist damit beendet. Du kannst den Arbeitsplatz jetzt verlassen und dem Versuchsleiter Bescheid geben.
Flow
  Routine Einwilligungserklaerung
  Routine beginning
  Routine intro
  LoopInitiator demos loopType="TrialHandler"
    conditionsFile = $'bedingungen_gruppeA.csv' if expInfo['gruppe'] == 'odd' else 'bedingungen_gruppeB.csv'
    loopType = sequential
    nReps = 1 if expInfo['gruppe'] == 'odd' else 2
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    conditions:
      [OrderedDict([('typ', 'durchgang'), ('start_index', 1), ('ziel_index', 3), ('durchgang_index', 2), ('farbe', 'gruen'), ('loesung', 'right right')]),
      OrderedDict([('typ', 'durchgang'), ('start_index', 1), ('ziel_index', 3), ('durchgang_index', 2), ('farbe', 'blau'), ('loesung', 'right right')]),
      OrderedDict([('typ', 'durchgang'), ('start_index', 2), ('ziel_index', 0), ('durchgang_index', 0), ('farbe', 'gruen'), ('loesung', 'left left')]),
      OrderedDict([('typ', 'durchgang'), ('start_index', 2), ('ziel_index', 0), ('durchgang_index', 0), ('farbe', 'blau'), ('loesung', 'left left')]),
      OrderedDict([('typ', 'portal'), ('start_index', 1), ('ziel_index', 3), ('durchgang_index', 0), ('farbe', 'gruen'), ('loesung', 'left left')]),
      OrderedDict([('typ', 'portal'), ('start_index', 1), ('ziel_index', 3), ('durchgang_index', 0), ('farbe', 'blau'), ('loesung', 'right right right right right right ')]),
      OrderedDict([('typ', 'portal'), ('start_index', 2), ('ziel_index', 0), ('durchgang_index', 0), ('farbe', 'gruen'), ('loesung', 'left left left left left left')]),
      OrderedDict([('typ', 'portal'), ('start_index', 2), ('ziel_index', 0), ('durchgang_index', 0), ('farbe', 'blau'), ('loesung', 'right right')]),
      OrderedDict([('typ', 'durchgang'), ('start_index', 1), ('ziel_index', 3), ('durchgang_index', 2), ('farbe', 'rot'), ('loesung', 'right right')]),
      OrderedDict([('typ', 'durchgang'), ('start_index', 1), ('ziel_index', 3), ('durchgang_index', 2), ('farbe', 'lila'), ('loesung', 'right right')])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
    Routine demo
  LoopTerminator demos
  Routine uebergang
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $'bedingungen_gruppeA.csv' if expInfo['gruppe'] == 'odd' else 'bedingungen_gruppeB.csv'
    loopType = random
    nReps = 1 if expInfo['gruppe'] == 'odd' else 2
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    Routine trialSimulation
  LoopTerminator trials
  Routine WelcomeScreen
  Routine InstructionScreen
  Routine elementMotionExplained
  Routine blank800
  LoopInitiator elementMotionDemo loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine exampleFrame1
    Routine exampleFrame2
    Routine blank800
  LoopTerminator elementMotionDemo
  Routine groupMotionExplained
  Routine blank800
  LoopInitiator groupMotionDemo loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine exampleFrame1
    Routine blank160
    Routine exampleFrame2
    Routine blank800
  LoopTerminator groupMotionDemo
  Routine PracticeExplained
  Routine blank800
  LoopInitiator practiceLoop loopType="TrialHandler"
    conditionsFile = practiceLoopConditionsTeamprojekt.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'conditions_practice': 'Portal', 'ISI_practice': 0},
      {'conditions_practice': 'Portal', 'ISI_practice': 0.02},
      {'conditions_practice': 'Portal', 'ISI_practice': 0.08},
      {'conditions_practice': 'Portal', 'ISI_practice': 0.16},
      {'conditions_practice': 'Barrier', 'ISI_practice': 0},
      {'conditions_practice': 'Barrier', 'ISI_practice': 0.02},
      {'conditions_practice': 'Barrier', 'ISI_practice': 0.08},
      {'conditions_practice': 'Barrier', 'ISI_practice': 0.16},
      {'conditions_practice': 'Standard', 'ISI_practice': 0},
      {'conditions_practice': 'Standard', 'ISI_practice': 0.02},
      {'conditions_practice': 'Standard', 'ISI_practice': 0.08},
      {'conditions_practice': 'Standard', 'ISI_practice': 0.16}]
    Routine practiceFrame1
    Routine blankISI_Practice
    Routine practiceFrame2
    Routine blank500
    Routine blank800
  LoopTerminator practiceLoop
  Routine StartScreen
  Routine blank800
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 15
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    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = trialLoopConditionsTeamprojekt.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'condition': 'Portal', 'interstim_interval': 0},
        {'condition': 'Portal', 'interstim_interval': 0.01},
        {'condition': 'Portal', 'interstim_interval': 0.02},
        {'condition': 'Portal', 'interstim_interval': 0.04},
        {'condition': 'Portal', 'interstim_interval': 0.08},
        {'condition': 'Portal', 'interstim_interval': 0.16},
        {'condition': 'Barrier', 'interstim_interval': 0},
        {'condition': 'Barrier', 'interstim_interval': 0.01},
        {'condition': 'Barrier', 'interstim_interval': 0.02},
        {'condition': 'Barrier', 'interstim_interval': 0.04},
        {'condition': 'Barrier', 'interstim_interval': 0.08},
        {'condition': 'Barrier', 'interstim_interval': 0.16},
        {'condition': 'Standard', 'interstim_interval': 0},
        {'condition': 'Standard', 'interstim_interval': 0.01},
        {'condition': 'Standard', 'interstim_interval': 0.02},
        {'condition': 'Standard', 'interstim_interval': 0.04},
        {'condition': 'Standard', 'interstim_interval': 0.08},
        {'condition': 'Standard', 'interstim_interval': 0.16}]
      Routine ternusFrame1
      Routine blankISI
      Routine ternusFrame2
      Routine blank500
      Routine blank800
    LoopTerminator trialLoop
    Routine blockBreak
    Routine blank800
  LoopTerminator blockLoop
  LoopInitiator questionnaireLoop loopType="TrialHandler"
    conditionsFile = questionnaireConditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'qID': 'Q01', 'groupShow': 'all', 'qType': 'rating', 'questionText': 'Ich habe die Aufgabe während des gesamten Experiments gewissenhaft bearbeitet.'},
      {'qID': 'Q02', 'groupShow': 'all', 'qType': 'rating', 'questionText': 'Bei der Entscheidung, wie sich die Punkte bewegen, habe ich mich ausschließlich auf meinen spontanen, visuellen Eindruck verlassen.'},
      {'qID': 'Q03', 'groupShow': 'all', 'qType': 'rating', 'questionText': 'Meine Entscheidungen fühlten sich intuitiv an.'},
      {'qID': 'Q04', 'groupShow': 'all', 'qType': 'rating', 'questionText': 'Ich habe bei der Entscheidung oft logisch überlegt, wie sich die Punkte bewegen müssten, anstatt darauf zu achten, was ich im Moment sehe.'},
      {'qID': 'Q05', 'groupShow': 'A', 'qType': 'text', 'questionText': 'Bitte beschreibe die Regeln aus Phase 1 des Experiments, die du am Anfang kennengelernt hast, kurz in eigenen Worten.'},
      {'qID': 'Q06', 'groupShow': 'A', 'qType': 'rating', 'questionText': 'Ich habe die Regeln aus der 1. Phase des Experiments in der Testphase dauerhaft angewandt.'},
      {'qID': 'Q07', 'groupShow': 'A', 'qType': 'rating', 'questionText': 'Ich konnte stets vorhersagen, was mit einem Punkt passiert, wenn er einen Farbwechsel macht.'},
      {'qID': 'Q08', 'groupShow': 'A', 'qType': 'rating', 'questionText': 'Gegen Ende des Experiments fühlte sich die Bewegung der Punkte gemäß der Regeln aus Phase 1 des Experiments ganz natürlich an.'}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
    Routine questionRouter
    Routine RatingQuestion
    Routine FreeTextQuestion
    Routine YesNoQuestion
  LoopTerminator questionnaireLoop
  Routine QuestionnaireFinish
